acquisition:
  metadata:
    subject_id: 123456
    experimenter_name: adam glaser
    immersion_medium: 0.05X SSC
    immersion_medium_refractive_index: 1.33
    x_anatomical_direction: Anterior_to_posterior
    y_anatomical_direction: Inferior_to_superior
    z_anatomical_direction: Left_to_right
  operations:
    writers:
      vp-151mx:
        driver: voxel.writers.bdv
        module: Writer
        init:
          path: ./local_test
        settings:
          compression: none
          data_type: uint16
    transfers:
      vp-151mx:
        driver: voxel.processes.file_transfer.rsync
        module: FileTransfer
        init:
          external_directory: ./external_test
  processes:
    pre:
      - name: background collection
        driver: processes.background_collection
        module: Processor
        settings:
          frames: 10
    intra:
      - name: max projection
        driver: processes.max_projection
        module: Processor
    post:
  tiles:
    - tile_number:
        x: 0
        y: 0
        z: 0
      position_mm:
        x: 0
        y: 0
        z: 0
      voxel_size_um:
        x: 0.748
        y: 0.748
        z: 1.000
      prefix: tile
      frame_count_px: 128
      binning: 1
      channel: 488
      power_mw: 1000
      filter:
        "0": BP405
    - tile_number:
        x: 1
        y: 0
        z: 0
      position_mm:
        x: 1
        y: 1
        z: 1
      voxel_size_um:
        x: 0.748
        y: 0.748
        z: 1.000
      prefix: tile
      frame_count_px: 256
      binning: 1
      channel: 488
      power_mw: 1000
      filter:
        "0": BP405